<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices _id="id36070044" tag="IO Devices"></io_devices>
    <variables _id="id36070045" tag="Variables"></variables>
    <sounds _id="id36070046" tag="Sounds"></sounds>
    <stimuli _id="id36070047" tag="Stimuli">
        <stimulus _id="id36070049" tag="background" full_name="background" type="blank_screen" color="1.0, 1.0, 1.0"></stimulus>
        <stimulus _id="_id1" type="image_file" tag="image" path="1.png" x_size="5.0" y_size="5.0" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="NO"></stimulus>
        <stimulus _id="_id3" type="image_mask" tag="mask" path="1.png" x_size="5.0" y_size="5.0" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="explicit"></stimulus>
    </stimuli>
    <filters _id="id36070058" tag="Filters"></filters>
    <optimizers _id="id36070060" tag="Optimizers"></optimizers>
    <experiment _id="id36070061" tag="Experiment" full_name="" description="">
        <protocol _id="id36070068" tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential">
            <trial _id="_id5" tag="New Trial" nsamples="1" sampling_method="cycles" selection="sequential">
                <action _id="_id1" tag="Load Stimulus" type="load_stimulus" stimulus="mask"></action>
                <action _id="_id25" tag="Queue Stimulus 3" type="queue_stimulus" stimulus="background"></action>
                <action _id="_id7" tag="Queue Stimulus" type="queue_stimulus" stimulus="image"></action>
                <action _id="_id9" tag="Update Stimulus" type="update_stimulus_display"></action>
                <action _id="_id17" type="wait" tag="Wait" duration="200" duration_units="ms"></action>
                <action _id="_id11" tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="image"></action>
                <action _id="_id13" tag="Queue Stimulus 2" type="queue_stimulus" stimulus="mask"></action>
                <action _id="_id15" tag="Update Stimulus 2" type="update_stimulus_display"></action>
                <action _id="_id19" type="wait" tag="Wait 2" duration="200" duration_units="ms"></action>
                <action _id="_id21" tag="Dequeue Stimulus 2" type="dequeue_stimulus" stimulus="mask"></action>
                <action _id="_id23" tag="Update Stimulus 3" type="update_stimulus_display"></action>
                <action _id="_id27" type="wait" tag="Wait 3" duration="1.0" duration_units="s"></action>
            </trial>
        </protocol>
    </experiment>
</monkeyml>